PsychoPy2experiment version="2024.2.1"
Settings
  Experiment info = {'participant': '00', 'condition': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(1.0000, 1.0000, 1.0000)
  expName = UG2-mood
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine avatar_present
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    ImageComponent avatar
      image [set every repeat] = $directory
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.25,0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter_trial
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    TextComponent offer_txt
      color = black
      letterHeight = 0.06
      pos = [0,-0.17]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = jitter_trial
      text [set every repeat] = $avatar_prop
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
        thisExp.addData('jitter_sec', jitter_trial)
  Routine offer_present
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    TextComponent you_txt
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent partner_txt
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $name
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    TextComponent dollar_Ytxt
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $dollarY
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    TextComponent dollar_Ptxt
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $dollarO
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    ImageComponent you_image
      image [set every repeat] = $dollarImageY
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent partner_image
      image [set every repeat] = $dollarImageO
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent acc_txt
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent rej_txt
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Reject
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    PolygonComponent acc_box
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rej_box
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent choice_key
      allowedKeys = 'left','right','3','1'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
  Routine offer_choice
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    CodeComponent box_change
      Code Type = Auto->JS
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      Begin Routine:
        if choice_key.keys == 'left' or choice_key.keys == '3': #accept
            #time = core.getTime()
            acc_box_2.lineColor = 'black'
            resp = 1
        elif choice_key.keys == 'right' or choice_key.keys == '1': #reject
            #time = core.getTime()
            rej_box_2.lineColor = 'black'
            resp = 0
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_2
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = You
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    TextComponent partner_txt_2
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $name
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    TextComponent dollar_Ytxt_2
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $dollarY
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    TextComponent dollar_Ptxt_2
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $dollarO
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    ImageComponent you_image_2
      image [set every repeat] = $dollarImageY
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent partner_image_2
      image [set every repeat] = $dollarImageO
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent acc_txt_2
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Accept
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    TextComponent rej_txt_2
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Reject
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    PolygonComponent acc_box_2
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent rej_box_2
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent box_clear
      Code Type = Auto->JS
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      End Routine:
        acc_box_2.lineColor = 'white'
        rej_box_2.lineColor = 'white'
  Routine offer_reveal
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if resp == 0: #reject: no offer
            dollarY = "$ 0"
            dollarO = "$ 0"
            dollarImageY = 'cash\d0.png'
            dollarImageO = 'cash\d0.png'
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_3
      color = black
      letterHeight = txt_small
      pos = [-0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = You get:
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    TextComponent partner_txt_3
      color = black
      letterHeight = txt_small
      pos = [0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $avatar_final
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    TextComponent dollar_Ytxt_3
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $dollarY
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    TextComponent dollar_Ptxt_3
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $dollarO
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    ImageComponent you_image_3
      image [set every repeat] = $dollarImageY
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent partner_image_3
      image [set every repeat] = $dollarImageO
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine survey
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    SliderComponent slider
      fillColor = deepskyblue
      forceEndRoutine = False
      granularity = 0
      labels = 'No control', 'Complete control'
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (0, 50, 100)
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    TextComponent surveyQ1_txt
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much influence (%) do you think you had on the offers made by the FIRST team you played with, 
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    TextComponent ins_txt
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Use ARROW KEY to move slider
        Press SPACE BAR to confirm
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent team_txt
      color = gold
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Aldertown?
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider.markerPos = 50
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)

        keys = event.getKeys()
        if len(keys):
            if 'left' in keys:
                slider.markerPos = slider.markerPos - 1
            elif 'right' in keys:
                slider.markerPos = slider.markerPos + 1
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    KeyboardComponent slider_move1
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine team
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    ImageComponent team_img
      image [set every repeat] = $teamDir
      interpolate = nearest
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.75, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 64
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    TextComponent team_txt1
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        For this set of rounds you will be playing with
    KeyboardComponent team_key
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      color = black
      letterHeight = txt_size
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to continue
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    TextComponent team_txt2
      color [set every repeat] = $teamColor
      letterHeight = 0.07
      pos = (0, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $team
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    CodeComponent team_rand
      Code Type = Auto->JS
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      Begin Routine:
        random.shuffle(nc_offer)
        noControl = nc_first + nc_offer
        print("offer", noControl, len(noControl))

        random.shuffle(jitter)
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
  Routine trial_prep
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    CodeComponent settings_trial
      Code Type = Auto->JS
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      Begin Routine:
        avatar_prop = name + " proposes"
        avatar_final = name + " gets:"

        offerY = noControl[offerIndex]
        offerO = 20-noControl[offerIndex]

        dollarY = '$ ' + str(offerY)
        dollarO = '$ ' + str(offerO)
        dollarImageY = 'cash\d' + str(offerY) + '.png'
        dollarImageO = 'cash\d' + str(offerO) + '.png'

        thisExp.addData('offer you', offerY)
        thisExp.addData('offer other', offerO)

        jitter_trial = jitter[offerIndex]
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
  Routine mood
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    SliderComponent slider_2
      borderColor = black
      color = black
      fillColor = deepskyblue
      forceEndRoutine = False
      granularity = 0
      labels = 'Bad', 'Good'
      letterHeight = txt_size
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = slider
      ticks = (0, 50, 100)
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    TextComponent surveyQ1_txt_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How do you feel?
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    TextComponent ins_txt_2
      color = black
      letterHeight = txt_size
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Use LEFT or RIGHT to move slider
        Press SPACE or UP to confirm
    KeyboardComponent slider_choose
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent mood_code
      Code Type = Auto->JS
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      Begin Routine:
        if mood[offerIndex] == 0:
            continueRoutine = False

        event.clearEvents('keyboard')
        slider_2.markerPos = 50
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)

        #keys = slider_move.getKeys(['left','3','right','1'], waitRelease=False,clear=False)
        #
        #for key in keys:
        #    if key == 'left' and slider_2.markerPos > 0:
        #        slider_2.markerPos -= 0.5
        ##    else:
        ##        continueRoutine=True

        keys = event.getKeys()
        if len(keys):
            if 'left' in keys:
                slider_2.markerPos = slider_2.markerPos - 5
            elif '3' in keys:
                slider_2.markerPos = slider_2.markerPos - 5
            elif 'right' in keys:
                slider_2.markerPos = slider_2.markerPos + 5
            elif '1' in keys:
                slider_2.markerPos = slider_2.markerPos + 5
      End Routine:
        thisExp.addData('trigger down', trigger_list)
        if mood[offerIndex] == 1:
            thisExp.addData('rating', slider_2.markerPos)
    ImageComponent good_img
      image = mood image\HappyFace.png
      pos = (0.4, 0.1)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent bad_img
      image = mood image\SadFace.png
      pos = (-0.4, 0.1)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent ok_img
      image = mood image\JustFace.png
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent slider_move
      allowedKeys = 'left','right','3','1'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine survey_2
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    SliderComponent slider_3
      fillColor = deepskyblue
      forceEndRoutine = False
      granularity = 0
      labels = 'No control', 'Complete control'
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeHistory = True
      styles = slider
      ticks = (0, 50, 100)
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    TextComponent surveyQ1_txt_3
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much influence (%) do you think you had on the offers made by the FIRST team you played with, 
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    TextComponent ins_txt_3
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Use ARROW KEY to move slider
        Press SPACE BAR to confirm
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent team_txt_2
      color = cornflowerblue
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = computer?
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        event.clearEvents('keyboard')
        slider_3.markerPos = 50
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)

        keys = event.getKeys()
        if len(keys):
            if 'left' in keys:
                slider_3.markerPos = slider_3.markerPos - 1
            elif 'right' in keys:
                slider_3.markerPos = slider_3.markerPos + 1
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    KeyboardComponent slider_move2
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine prc_present_acc
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    ImageComponent avatar_2
      image [set every repeat] = practice\Hannah.png
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.25,0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent offer_txt_2
      color = black
      letterHeight = 0.06
      pos = [0,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Hannah proproses
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    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent upperRight_5
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Practice round
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  Routine prc_offer_acc
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    TextComponent you_txt_4
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent partner_txt_4
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hannah
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    TextComponent dollar_Ytxt_4
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dollarYp
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    TextComponent dollar_Ptxt_4
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dollarOp
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    ImageComponent you_image_4
      image = cash\d5.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent partner_image_4
      image = cash\d15.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent acc_txt_3
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent rej_txt_3
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Reject
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    PolygonComponent acc_box_3
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
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    PolygonComponent rej_box_3
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
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    KeyboardComponent choice_key_2
      allowedKeys [set every repeat] = 'left','3'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
    ImageComponent acc_img
      image [set every repeat] = development\UG-Mood_Instruction\Slide8.jpg
      interpolate = nearest
      pos [set every repeat] = [-0.4, -0.15]
      saveStartStop = False
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent upperRight_6
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice round
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  Routine prc_choice_acc
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    CodeComponent box_change_2
      Code Type = Auto->JS
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      Begin Routine:
        if choice_key_2.keys == 'left' or choice_key_2.keys == '3': #accept
            #time = core.getTime()
            acc_box_4.lineColor = 'black'
            resp = 1
        elif choice_key_2.keys == 'right' or choice_key_2.keys == '1': #reject
            #time = core.getTime()
            rej_box_4.lineColor = 'black'
            resp = 0
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
        # wait for keypresses here
        #keys = kb.getKeys()
        #for thisKey in keys:
        #    if thisKey == 't':  # it is equivalent to the string 'q'
        #        time = core.getTime()
        #        print(time)
        #    else:
        #        print(thisKey.name, thisKey.tDown, thisKey.rt)

        #keys = kb.getKeys(['t'])
        #if 't' in keys:
        #    time = core.getTime()
        #    print(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_5
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = You
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    TextComponent partner_txt_5
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Hannah
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    TextComponent dollar_Ytxt_5
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = $dollarYp
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    TextComponent dollar_Ptxt_5
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = $dollarOp
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    ImageComponent you_image_5
      image = cash\d5.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent partner_image_5
      image = cash\d15.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent acc_txt_4
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Accept
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    TextComponent rej_txt_4
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Reject
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    PolygonComponent acc_box_4
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent rej_box_4
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent box_clear_2
      Code Type = Auto->JS
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      End Routine:
        acc_box_2.lineColor = 'white'
        rej_box_2.lineColor = 'white'
    TextComponent upperRight_7
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Practice round
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  Routine exp_prep
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    CodeComponent main_code
      Code Type = Auto->JS
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      Before Experiment:
        import random

        txt_size = 0.04
        txt_small = 0.035
        title_size = 0.1
        image_Yloc = [-0.13,0]
        image_Ploc = [0.13,0]
        Accbox_loc = [-0.11,-0.17]
        Rejbox_loc = [0.09, -0.17]

        #no control offer debug version
        #noControl = [3,2,3]
        #random.shuffle(noControl)

        #offer list
        nc_first = [5]
        nc_offer = [1, 1, 2, 2, 2, 3, 3, 3, 4, 4, 4, 4, 5, 5, 5, 5, 5, 6, 6, 6, 6, 7, 7, 7, 8, 8, 8, 9, 9]

        #mood sample
        mood_set = [[0,1],[0,1],[0,1],[0,0,1],[0,0,1],[0,0,1],[0,0,1],[0,0,0,1],[0,0,0,1],[0,0,0,1]]
        #mood_set = [[0,0,1]]
        random.shuffle(mood_set)
        mood = [item for l in mood_set for item in l]

        #trigger key listen
        kb = keyboard.Keyboard()
        trigger_list = []

        #condition folder directory
        conditionfolder = ''

        #fixation
        jitter = [1.8, 1.6, 2.1, 1.9, 2.2, 1.9, 2.3, 1.5, 2.2, 1.5, 1.6, 1.8, 2.1, 2.4, 2.3, 2.0, 1.5, 1.7, 2.0, 2.2, 1.5, 1.8, 2.4, 2.2, 2.4, 2.5, 2.0, 1.8, 1.9, 2.3]
      Begin Experiment:
        if expInfo.get('condition') == '1':
            conditionfolder = 'experiment/block.xlsx'

        if expInfo.get('condition') == '2':
            conditionfolder = 'experiment/block2.xlsx'
      Each Frame:
        #keys = kb.getKeys(['t'])
        #if 't' in keys:
        #    time = core.getTime()
        #    trigger_list.append(time)
      End Routine:
        #thisExp.addData('trigger down', trigger_list)
    KeyboardComponent ExpStart_key
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent trigger_txt
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting to start...
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  Routine end
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    TextComponent text_9
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Game end

        Thank you for your time
    KeyboardComponent expEnd_key
      allowedKeys = 'escape'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prc_prep
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    CodeComponent prc_code
      Code Type = Auto->JS
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      Before Experiment:
        dollarYp = "$ 5"
        dollarOp = "$ 15"

        dollarYpr = "$ 0"
        dollarOpr = "$ 0"
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
  Routine fixation
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    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent fix_txt
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = +
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  Routine ins_open
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    CodeComponent visual_setup
      Code Type = Auto->JS
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      Before Experiment:
        txt_size = 0.05
        title_size = 0.1

        #text position log
        txt_low = (0,-0.4)
        txt_upright = (0.4,0.4)
    TextComponent title
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Deal Making Game
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    TextComponent lowMid_open
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to begin
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    KeyboardComponent ins_key
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent sub_title
      color = $(-0.4667, -0.4510, -0.4510)
      disabled = True
      letterHeight = 0.07
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How influential are you?
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  Routine ins1
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    TextComponent upperRight
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Game Rules
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    TextComponent main_txt
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $ins1_main
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    TextComponent lowMid
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to continue
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    KeyboardComponent ins1_key
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_13
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine ins2
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    TextComponent upperRight_2
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Game Rules
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    TextComponent main_txt_2
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If you choose to accept, both of you will receive the offered amounts.
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    TextComponent lowMid_2
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to continue
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    KeyboardComponent ins1_key_2
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_14
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine ins3
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    TextComponent upperRight_3
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Game Rules
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    TextComponent main_txt_3
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If you reject, neither of you will receive anything.
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    TextComponent lowMid_3
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to begin PRACTICE
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    KeyboardComponent ins1_key_3
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_15
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine prc_ins1
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    TextComponent upperRight_4
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice round
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    TextComponent main_txt_4
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Let’s see what happens when you accept.
    TextComponent lowMid_4
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to continue
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    KeyboardComponent ins1_key_4
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_16
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine ins6
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    TextComponent upperRight_14
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Game Rules
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    TextComponent main_txt_6
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Now you’re ready to get started playing the game. You will play with either a team of people or a computer, and you will be prompted to rate your feelings.
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    TextComponent lowMid_6
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to BEGIN
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    KeyboardComponent ins1_key_6
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_17
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine prc_ins2
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    TextComponent upperRight_9
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice round
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    TextComponent main_txt_5
      color = black
      letterHeight = txt_size
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Let’s see what happens when you reject.
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    TextComponent lowMid_5
      color = grey
      letterHeight = txt_size
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE or UP to continue
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    KeyboardComponent ins1_key_5
      allowedKeys = 'space','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_18
      Code Type = Auto->JS
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      Before Experiment:
        ins1_main = 'In each round of this game, you will play with another person who will make an offer on how to split $20 with you.'
  Routine prc_present_rej
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    ImageComponent avatar_3
      image [set every repeat] = practice\Hannah.png
      pos = (0, 0.05)
      saveStartStop = False
      size = (0.25,0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent offer_txt_3
      color = black
      letterHeight = 0.06
      pos = [0,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Hannah proproses
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    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent upperRight_10
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Practice round
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  Routine prc_offer_rej
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    TextComponent you_txt_7
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = You
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    TextComponent partner_txt_7
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Hannah
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    TextComponent dollar_Ytxt_7
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dollarYp
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    TextComponent dollar_Ptxt_7
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $dollarOp
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    ImageComponent you_image_7
      image = cash\d5.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent partner_image_7
      image = cash\d15.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent acc_txt_5
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Accept
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    TextComponent rej_txt_5
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Reject
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    PolygonComponent acc_box_5
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
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    PolygonComponent rej_box_5
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
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    KeyboardComponent choice_key_3
      allowedKeys = 'right','1'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
    ImageComponent rej_img
      image = development\UG-Mood_Instruction\Slide10.jpg
      interpolate = nearest
      pos [set every repeat] = [0.4, -0.15]
      saveStartStop = False
      size = (0.3, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent upperRight_11
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Practice round
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  Routine prc_choice_rej
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    CodeComponent box_change_3
      Code Type = Auto->JS
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      Begin Routine:
        if choice_key_3.keys == 'left' or choice_key_3.keys == '3': #accept
            #time = core.getTime()
            acc_box_6.lineColor = 'black'
            resp = 1
        elif choice_key_3.keys == 'right' or choice_key_3.keys == '1': #reject
            #time = core.getTime()
            rej_box_6.lineColor = 'black'
            resp = 0
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
        # wait for keypresses here
        #keys = kb.getKeys()
        #for thisKey in keys:
        #    if thisKey == 't':  # it is equivalent to the string 'q'
        #        time = core.getTime()
        #        print(time)
        #    else:
        #        print(thisKey.name, thisKey.tDown, thisKey.rt)

        #keys = kb.getKeys(['t'])
        #if 't' in keys:
        #    time = core.getTime()
        #    print(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_8
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = You
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    TextComponent partner_txt_8
      color = black
      letterHeight = txt_small
      pos = [0.10,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Hannah
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    TextComponent dollar_Ytxt_8
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = $dollarYp
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    TextComponent dollar_Ptxt_8
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = $dollarOp
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    ImageComponent you_image_8
      image = cash\d5.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    ImageComponent partner_image_8
      image = cash\d15.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent acc_txt_6
      color = black
      letterHeight = txt_size
      pos = [-0.11,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Accept
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    TextComponent rej_txt_6
      color = black
      letterHeight = txt_size
      pos = [0.09,-0.17]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Reject
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    PolygonComponent acc_box_6
      lineWidth = 4
      pos = Accbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    PolygonComponent rej_box_6
      lineWidth = 4
      pos = Rejbox_loc 
      saveStartStop = False
      shape = rectangle
      size = (0.17, 0.1) 
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent box_clear_3
      Code Type = Auto->JS
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      End Routine:
        acc_box_6.lineColor = 'white'
        rej_box_6.lineColor = 'white'
    TextComponent upperRight_12
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Practice round
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  Routine prc_reveal_acc
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if resp == 0: #reject: no offer
            dollarY = "$ 0"
            dollarO = "$ 0"
            dollarImageY = 'cash/d0.png'
            dollarImageO = 'cash/d0.png'
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_6
      color = black
      letterHeight = txt_small
      pos = [-0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You get:
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    TextComponent partner_txt_6
      color = black
      letterHeight = txt_small
      pos = [0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Hannah gets:
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    TextComponent dollar_Ytxt_6
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $dollarYp
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    TextComponent dollar_Ptxt_6
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $dollarOp
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    ImageComponent you_image_6
      image = cash\d5.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent partner_image_6
      image = cash\d15.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent upperRight_8
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Practice round
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  Routine prc_reveal_rej
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        if resp == 0: #reject: no offer
            dollarY = "$ 0"
            dollarO = "$ 0"
            dollarImageY = 'cash/d0.png'
            dollarImageO = 'cash/d0.png'
      Each Frame:
        keys = kb.getKeys(['t'])
        if 't' in keys:
            time = core.getTime()
            trigger_list.append(time)
      End Routine:
        thisExp.addData('trigger down', trigger_list)
    TextComponent you_txt_9
      color = black
      letterHeight = txt_small
      pos = [-0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = You get:
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    TextComponent partner_txt_9
      color = black
      letterHeight = txt_small
      pos = [0.13,0.2]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Hannah gets:
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    TextComponent dollar_Ytxt_9
      color = black
      letterHeight = txt_small
      pos = [-0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $dollarYpr
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    TextComponent dollar_Ptxt_9
      color = black
      letterHeight = txt_small
      pos = [0.10,0.15]
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $dollarYpr
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    ImageComponent you_image_9
      image = cash\d0.png
      interpolate = nearest
      pos = image_Yloc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent partner_image_9
      image = cash\d0.png
      interpolate = nearest
      pos = image_Ploc
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent upperRight_13
      color = gray
      letterHeight = txt_size
      pos = (0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Practice round
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Flow
  Routine ins_open
  Routine ins1
  Routine ins2
  Routine ins3
  Routine prc_prep
  Routine prc_ins1
  Routine prc_present_acc
  Routine prc_offer_acc
  Routine prc_choice_acc
  Routine prc_reveal_acc
  Routine prc_ins2
  Routine prc_present_rej
  Routine prc_offer_rej
  Routine prc_choice_rej
  Routine prc_reveal_rej
  Routine ins6
  Routine exp_prep
  LoopInitiator team_block loopType="TrialHandler"
    conditionsFile = $conditionfolder
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine team
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $test
      loopType = sequential
      nReps = 1
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      Routine trial_prep
      Routine avatar_present
      Routine offer_present
      Routine offer_choice
      Routine offer_reveal
      Routine mood
      Routine fixation
    LoopTerminator trials
  LoopTerminator team_block
  Routine end
